PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'run': '1', 'config': 'fnirs', 'test_run': 'false', 'language': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = mindvoice-pt2
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine weclome
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    CodeComponent init
      Code Type = Py
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
        import socket
        import os
        import yaml
        import random

        marker_info = StreamInfo('MarkerStream', 'Markers',
                                 1, 0, 'string', 'myuid8342')
        config_file = open('config.yaml')
        yaml_config = yaml.safe_load(config_file)
        marker_outlet = StreamOutlet(marker_info)
        started_recording = False
        s = socket.create_connection(("localhost", 22345))
      Begin Experiment:
        participant_id = expInfo['participant']
        run = expInfo['run']
        test_run = expInfo['test_run']
        config_type = expInfo['config']
        language = expInfo['language']
        TESTING = test_run == 'true'
        task = yaml_config['task_2']
        exp_config = yaml_config[config_type]

        config_str = f'filename {{template:sub-%p/sub-%p_task-%b_run-%n.xdf}} {{run:{run}}} {{participant:{participant_id}}} {{task:{task}}}\n'
        print(config_str)

        s.sendall(b"update\n")
        s.sendall(b"select all\n")
        s.sendall(config_str.encode('utf-8'))
        s.sendall(b"start\n")
        started_recording = True

        stimuli_repeats = exp_config['stimuli_repeats']
        baseline_duration = exp_config['baseline_duration']
        rest_range = exp_config['rest_range']

        REPEATS = int(stimuli_repeats)
        print(f"STIM REPEATS: {REPEATS}")
        if language == 'zh':
            with open(os.path.join('stimuli', 'stimuli_chinese_Introduce.txt'), 'r', encoding='utf-8') as introduce:
                introduce_lines = introduce.read().splitlines()

            with open(os.path.join('stimuli', 'stimuli_chinese_Travel.txt'), 'r', encoding='utf-8') as travel:
                travel_lines = travel.read().splitlines()

            with open(os.path.join('stimuli', 'stimuli_chinese_culture.txt'), 'r', encoding='utf-8') as culture:
                culture_lines = culture.read().splitlines()

            all_lines = [
                (introduce_lines, 'introduce'),
                (travel_lines, 'travel'),
                (culture_lines, 'culture')
            ]

        if language == 'en':
            with open(os.path.join('stimuli', 'stimuli_grandfather.txt'), 'r') as grandfather:
                grandfather_lines = grandfather.read().splitlines()

            with open(os.path.join('stimuli', 'stimuli_rainbow.txt'), 'r') as rainbow:
                rainbow_lines = rainbow.read().splitlines()

            with open(os.path.join('stimuli', 'stimuli_windsun.txt'), 'r') as windsun:
                windsun_lines = windsun.read().splitlines()

            all_lines = [
                (grandfather_lines, 'grandfather'),
                (rainbow_lines, 'rainbow'),
                (windsun_lines, 'windsun')
            ]

        all_lines *= REPEATS
        TRIALS = len(all_lines)
        if TESTING:
            TRIALS = 1
        index=0
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys and started_recording:
            s.sendall(b"stop\n")
            started_recording = False
      End Experiment:
        if started_recording:
            s.sendall(b"stop\n")
            started_recording = False
    TextComponent welcome_text
      font = Noto Sans SC
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment, you will engage in both silently imagining and verbally articulating paragraphs that are displayed on the screen. Before each paragraph, a cross symbol will be displayed as a visual cue, encouraging you to take a moment to rest and relax. The paragraphs presented will be divided into individual sentences. Your task involves mentally visualizing these sentences and then vocalizing them as prompted on the screen. After completing the tasks for each sentence, it is crucial for you to press the space key to advance to the next sentence; the experiment will not automatically progress without this action.

        Press the space key to start the experiment...
    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
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    CodeComponent rest_code
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample(["rest"])
        rest_duration = random.randint(rest_range[0],rest_range[1])
        index+=1
        current_stim = all_lines[index][0]
        stim_name = all_lines[index][1]

        sentence_length = len(current_stim)
        if TESTING:
            sentence_length = 1
        sentence_idx = 0
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys and started_recording:
            s.sendall(b"stop\n")
            started_recording = False
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rest_duration
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  Routine stimulus
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    CodeComponent stim_code
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample([f"stim-{stim_name}-{sentence_idx}"])
        stim_progress = 1
        STIM_DURATION = 3
      Each Frame:
        stim_progress = 1 - (t / STIM_DURATION)  # Calculate progress from 1 to 0 over the duration
        if stim_progress < 0:
            stim_progress = 0  # Ensure progress does not go below 0
    TextComponent stim_text
      font = Noto Sans SC
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = Get ready to imagine and then speak the sentance displayed on the screen
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    ProgressComponent prog_stim
      anchor = center left
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (0, -0.25)
      progress [set every frame] = stim_progress
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = height
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  Routine imagine
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    CodeComponent imagine_code
      Code Type = Py
      Begin Routine:
        stimulus_val = current_stim[sentence_idx]
        marker_outlet.push_sample([f"imagine-{stim_name}-{sentence_idx}"])
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys and started_recording:
            s.sendall(b"stop\n")
            started_recording = False
    TextComponent imagine_prompt
      font = Noto Sans SC
      letterHeight = 0.045
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = (Imagine)
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    TextboxComponent imagine_text
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      editable = False
      font = Noto Sans SC
      letterHeight = 0.045
      padding = 0.1
      size = (1, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $stimulus_val
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    TextComponent imagine_continue
      font = Noto Sans SC
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press space to continue...
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    KeyboardComponent imagine_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine speak
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    CodeComponent speak_code
      Code Type = Py
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      Begin Routine:
        marker_outlet.push_sample([f"speak-{stim_name}-{sentence_idx}"])
        sentence_idx+=1
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys and started_recording:
            s.sendall(b"stop\n")
            started_recording = False
    TextComponent speak_prompt
      font = Noto Sans SC
      letterHeight = 0.045
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = (Speak)
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    TextboxComponent speak_text
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      editable = False
      font = Noto Sans SC
      letterHeight = 0.045
      padding = 0.1
      size = (1, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $stimulus_val
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    TextComponent speak_continue
      font = Noto Sans SC
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press space to continue...
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    KeyboardComponent speak_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    CodeComponent code_end
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample(["end"])
        if started_recording:
            s.sendall(b"stop\n")
            started_recording = False
  Routine baseline
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    CodeComponent code_baseline
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample(["rest"])
        current_stim = all_lines[index][0]
        stim_name = all_lines[index][1]

        sentence_length = len(current_stim)
        if TESTING:
            sentence_length = 1
        sentence_idx = 0
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys and started_recording:
            s.sendall(b"stop\n")
            started_recording = False
    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $baseline_duration
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Flow
  Routine weclome
  Routine baseline
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = TRIALS
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    LoopInitiator num_sentances loopType="TrialHandler"
      loopType = random
      nReps = sentence_length
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      Routine imagine
      Routine speak
    LoopTerminator num_sentances
    Routine rest
  LoopTerminator trials
  Routine end
