PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'run': '1', 'config': 'fnirs', 'test_run': 'false'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = mindvoice-exp
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    CodeComponent code_init
      Code Type = Py
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
        import socket
        import random
        import os
        import yaml

        marker_info = StreamInfo('MarkerStream', 'Markers',
                                 1, 0, 'string', 'myuid8342')

        config_file = open('config.yaml')
        yaml_config = yaml.safe_load(config_file)
        marker_outlet = StreamOutlet(marker_info)
        started_recording = False
        s = socket.create_connection(("localhost", 22345))
      Begin Experiment:
        participant_id = expInfo['participant']
        run = expInfo['run']
        test_run = expInfo['test_run']
        config_type = expInfo['config']
        exp_config = yaml_config[config_type]
        task = yaml_config['task_1']
        TESTING = test_run == 'true'

        config_str = f'filename {{template:sub-%p/sub-%p_task-%b_run-%n.xdf}} {{run:{run}}} {{participant:{participant_id}}} {{task:{task}}}\n'
        print(config_str)

        s.sendall(b"update\n")
        s.sendall(b"select all\n")
        s.sendall(config_str.encode('utf-8'))
        s.sendall(b"start\n")
        started_recording = True

        # constants
        baseline_duration = exp_config['baseline_duration']
        stimuli_repetitions = exp_config['stimuli_repeats']
        rest_range = exp_config['rest_range']
        stimulus_duration = exp_config['stimulus_duration']
        imagine_duration = exp_config['imagine_duration']
        speak_duration = exp_config['speak_duration']
        NUM_REPS = int(stimuli_repetitions)

        print(f"Number of repititions: {NUM_REPS}")
        input_file = open(os.path.join('stimuli','stimuli_chinese_words.txt'))
        words = [x.strip() for x in input_file]
        if config_type == 'test':
            words = exp_config['words']
        words = words * NUM_REPS
        random.shuffle(words)
        word_idx = 0
        NUM_TRIALS = len(words)
        if TESTING:
            NUM_TRIALS = 1
        action_progress = 1
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys and started_recording:
            s.sendall(b"stop\n")
            started_recording = False
      End Experiment:
        if started_recording:
            s.sendall(b"stop\n")
            started_recording = False
    TextComponent textWelcomeScreen
      font = Heiti SC
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        欢迎！

        在这个实验中，您将默默想象并口头表达屏幕上显示的单词。 在出现每个单词之前，屏幕上都会显示一个十字，提示您休息和放松，为下一个单词做好准备。 休息一段时间后，将首先显示该单词； 然后您必须默默想象该单词，最后按照屏幕上的指示大声朗读。

        按空格键开始实验。
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
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    CodeComponent code_rest
      Code Type = Py
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      Begin Routine:
        marker_outlet.push_sample(["rest"])
        rest_duration = random.randint(rest_range[0],rest_range[1])
        if word_idx < len(words)-1:
            word_idx+=1
        else:
            word_idx = 0
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys and started_recording:
            s.sendall(b"stop\n")
            started_recording = False
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rest_duration
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  Routine end
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample(["end"])
        if started_recording:
            s.sendall(b"stop\n")
            started_recording = False
  Routine stimulus
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        marker_outlet.push_sample([f'stim-{words[word_idx]}'])
        stimulus_val = words[word_idx]
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys and started_recording:
            s.sendall(b"stop\n")
            started_recording = False
    TextComponent text_stimulus
      font = Heiti SC
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimulus_duration
      text [set every repeat] = $stimulus_val
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  Routine imagine
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample([f"I-{stimulus_val}"])
        action_progress = 1
      Each Frame:
        action_progress = 1 - (t / imagine_duration)  # Calculate progress from 1 to 0 over the duration
        if action_progress < 0:
            action_progress = 0  # Ensure progress does not go below 0

        keys = event.getKeys()
        if 'escape' in keys and started_recording:
            s.sendall(b"stop\n")
            started_recording = False
    TextComponent promt_imagine
      font = Heiti SC
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $imagine_duration
      text = (Imagine)
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    ProgressComponent prog_imagine
      anchor = bottom-center
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (0, -0.3)
      progress [set every frame] = action_progress
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $imagine_duration
      units = height
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  Routine speak
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample([f'S-{stimulus_val}'])
        action_progress = 1
      Each Frame:
        action_progress = 1 - (t / speak_duration)  # Calculate progress from 1 to 0 over the duration
        if action_progress < 0:
            action_progress = 0  # Ensure progress does not go below 0

        keys = event.getKeys()
        if 'escape' in keys and started_recording:
            s.sendall(b"stop\n")
            started_recording = False
    TextComponent prompt_speak
      font = Heiti SC
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $speak_duration
      text = (Speak)
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    ProgressComponent prog_speak
      anchor = bottom-center
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (0, -0.3)
      progress [set every frame] = action_progress
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $speak_duration
      units = height
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  Routine action
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        action = item_actions[word_idx][1]
        word = item_actions[word_idx][0]
        action_text = f'{action} the word: {word}'
    TextComponent text_action
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $action_text
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  Routine start_lsl
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  Routine baseline
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    CodeComponent code_baseline
      Code Type = Py
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      Begin Routine:
        marker_outlet.push_sample(["baseline"])
        bd = baseline_duration
      Each Frame:
        timer_val = round(baseline_duration - t, ndigits = 1)
        keys = event.getKeys()
        if 'escape' in keys and started_recording:
            s.sendall(b"stop\n")
            started_recording = False
    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $baseline_duration
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Flow
  Routine welcome
  Routine baseline
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = NUM_TRIALS
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    Routine stimulus
    Routine imagine
    Routine speak
    Routine rest
  LoopTerminator trials
  Routine end
